PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Initialien'], expName, expInfo['date'])
  Experiment info = {'Initialien': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = League of Legends Visual Search
  keyboardBackend = ioHub
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Routines
  Routine feedback
    CodeComponent correct_feedback
      Code Type = Auto->JS
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      Before Experiment:
        msg = ''
      Begin Routine:
        if correct == 1:
            msg = 'Richtig.'
        else:
            msg = 'Falsch.'
    TextComponent feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine trial
    ImageComponent target
      image = resources/T.png
      ori [set every repeat] = randchoice([90.0, 180.0, 270.0])
      pos [set every repeat] = (random()-0.5, random()-0.5)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
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    CodeComponent distr_fixation
      Code Type = Both
      Begin JS Routine:
        num_distr = util.randchoice([10, 15]);
        distractors = [];
        mymouse = new psychoJS.eventManager.Mouse();
        mymouse.setPos(newPos=(0, 0));
        //new psychoJS.eventManager.Mouse({"newPos": [0, 0]});
        fixation = new visual.ImageStim({"win": psychoJS.window, "name": "fixation", "image": os.path.join(os.getcwd(), "resources/fixation.png"), "pos": [0.0, 0.0], "size": 0.06});
        fixation.draw();
        psychoJS.window.flip();
        for (var i, _pj_c = 0, _pj_a = util.range(num_distr), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            distr_L = new visual.ImageStim({"win": psychoJS.window, "name": "distr_L", "image": os.path.join(os.getcwd(), "resources/L.png"), "mask": null, "anchor": "center", "ori": util.randchoice([0.0, 90.0, 180.0, 270.0]), "pos": [(random() - 0.5), (random() - 0.5)], "size": [0.06, 0.06], "color": [1, 1, 1], "colorSpace": "rgb", "opacity": null, "flipHoriz": true, "flipVert": true, "texRes": 128.0, "interpolate": true, "depth": (- 2.0)});
            distr_LT = new visual.ImageStim({"win": psychoJS.window, "name": "distr_LT", "image": os.path.join(os.getcwd(), "resources/LT.png"), "mask": null, "anchor": "center", "ori": util.randchoice([0.0, 90.0, 180.0, 270.0]), "pos": [(random() - 0.5), (random() - 0.5)], "size": [0.06, 0.06], "color": [1, 1, 1], "colorSpace": "rgb", "opacity": null, "flipHoriz": true, "flipVert": true, "texRes": 128.0, "interpolate": true, "depth": (- 2.0)});
            distr = util.randchoice([distr_L, distr_LT]);
            distractors.push(distr);
        }
        for (var distr, _pj_c = 0, _pj_a = distractors, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            distr = _pj_a[_pj_c];
            distr.setAutoDraw(true);
        }
      Begin Routine:
        # Initiation Distraktoren, Fixationskreuz

        num_distr = randchoice([10, 15])
        distractors = []

        #event.Mouse(newPos=(0,0))
        fixation = visual.ImageStim(win=win,name='fixation',
            image=os.path.join(os.getcwd(), 'resources/fixation.png'),
            pos=(0.0, 0.0), size=0.06)
        fixation.draw()
        win.flip()

        for i in range(num_distr):
           distr_L = visual.ImageStim(
            win=win,
            name='distr_L',
            image=os.path.join(os.getcwd(), 'resources/L.png'), mask=None, anchor='center',
            ori=randchoice([0.0, 90.0, 180.0, 270.0]), pos=(random()-0.5, random()-0.5), size=(0.06, 0.06),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=True,
            texRes=128.0, interpolate=True, depth=-2.0);

           distr_LT = visual.ImageStim(
            win=win,
            name='distr_LT',
            image=os.path.join(os.getcwd(), 'resources/LT.png'), mask=None, anchor='center',
            ori=randchoice([0.0, 90.0, 180.0, 270.0]), pos=(random()-0.5, random()-0.5), size=(0.06, 0.06),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=True,
            texRes=128.0, interpolate=True, depth=-2.0)

           distr = randchoice([distr_L, distr_LT])
           distractors.append(distr)

        for distr in distractors:
            distr.setAutoDraw(True)
      End JS Routine:
        for (var distr, _pj_c = 0, _pj_a = distractors, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            distr = _pj_a[_pj_c];
            distr.setAutoDraw(false);
        }
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent checkCorrect
      Code Type = Auto->JS
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      End Routine:
        if mouse.clicked_name == []:
            correct = 0
        else:
            correct = 1

        thisExp.addData('accuracy', correct)
  Routine practice_trial
    ImageComponent prac_target
      image = resources/T.png
      ori [set every repeat] = randchoice([90.0, 180.0, 270.0])
      pos [set every repeat] = (random()-0.5, random()-0.5)
      saveStartStop = False
      size = (0.06, 0.06)
      startVal [time (s)] = 0.0
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    CodeComponent prac_distr_fix
      Code Type = Both
      Begin JS Routine:
        num_distr = util.randchoice([5, 10]);
        distractors = [];
        mymouse = new psychoJS.eventManager.Mouse();
        mymouse.setPos(newPos=(0, 0));
        //new psychoJS.eventManager.Mouse({"newPos": [0, 0]});
        fixation = new visual.ImageStim({"win": psychoJS.window, "name": "fixation", "image": os.path.join(os.getcwd(), "resources/fixation.png"), "pos": [0.0, 0.0], "size": 0.06});
        fixation.draw();
        psychoJS.window.flip();
        for (var i, _pj_c = 0, _pj_a = util.range(num_distr), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            distr_L = new visual.ImageStim({"win": psychoJS.window, "name": "distr_L", "image": os.path.join(os.getcwd(), "resources/L.png"), "mask": null, "anchor": "center", "ori": util.randchoice([0.0, 90.0, 180.0, 270.0]), "pos": [(random() - 0.5), (random() - 0.5)], "size": [0.06, 0.06], "color": [1, 1, 1], "colorSpace": "rgb", "opacity": null, "flipHoriz": true, "flipVert": true, "texRes": 128.0, "interpolate": true, "depth": (- 2.0)});
            distr_LT = new visual.ImageStim({"win": psychoJS.window, "name": "distr_LT", "image": os.path.join(os.getcwd(), "resources/LT.png"), "mask": null, "anchor": "center", "ori": util.randchoice([0.0, 90.0, 180.0, 270.0]), "pos": [(random() - 0.5), (random() - 0.5)], "size": [0.06, 0.06], "color": [1, 1, 1], "colorSpace": "rgb", "opacity": null, "flipHoriz": true, "flipVert": true, "texRes": 128.0, "interpolate": true, "depth": (- 2.0)});
            distr = util.randchoice([distr_L, distr_LT]);
            distractors.push(distr);
        }
        for (var distr, _pj_c = 0, _pj_a = distractors, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            distr = _pj_a[_pj_c];
            distr.setAutoDraw(true);
        }
      Begin Routine:
        # Initiation Distraktoren

        num_distr = randchoice([5, 10])
        distractors = []

        #event.Mouse(newPos=(0,0))
        fixation = visual.ImageStim(win=win,name='fixation',
            image=os.path.join(os.getcwd(), 'resources/fixation.png'),
            pos=(0.0, 0.0), size=0.06)
        fixation.draw()
        win.flip()

        for i in range(num_distr):
           distr_L = visual.ImageStim(
            win=win,
            name='distr_L',
            image=os.path.join(os.getcwd(), 'resources/L.png'), mask=None, anchor='center',
            ori=randchoice([0.0, 90.0, 180.0, 270.0]), pos=(random()-0.5, random()-0.5), size=(0.06, 0.06),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=True,
            texRes=128.0, interpolate=True, depth=-2.0);

           distr_LT = visual.ImageStim(
            win=win,
            name='distr_LT',
            image=os.path.join(os.getcwd(), 'resources/LT.png'), mask=None, anchor='center',
            ori=randchoice([0.0, 90.0, 180.0, 270.0]), pos=(random()-0.5, random()-0.5), size=(0.06, 0.06),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=True, flipVert=True,
            texRes=128.0, interpolate=True, depth=-2.0)

           distr = randchoice([distr_L, distr_LT])
           distractors.append(distr)

        for distr in distractors:
            distr.setAutoDraw(True)
      End JS Routine:
        for (var distr, _pj_c = 0, _pj_a = distractors, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            distr = _pj_a[_pj_c];
            distr.setAutoDraw(false);
        }
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent prac_mouse
      clickable = prac_target
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent prac_checkCorr
      Code Type = Auto->JS
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      End Routine:
        if prac_mouse.clicked_name == []:
            correct = 0
        else:
            correct = 1
  Routine wait
    TextComponent nix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine inst1
    TextComponent inst11
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Willkommen zu unserem Experiment! " + " \n" + " \n Wir untersuchen, ob Gamer, die regelmäßiger League of Legends spielen einen besseren Reaktionszeitbonus bei visuellen Suchaufgaben haben." + " \n " + " \n Drücken Sie die Leertaste um fortzufahren…"
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst2
    TextComponent inst22
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Im Experiment wird Ihnen pro Durchgang jeweils ein Display bestehend aus den Buchstaben L und T präsentiert. Ihre Aufgabe ist es, unter einer bestimmten Menge von Ablenkreizen (L‘s) jeweils den einen Zielreiz (T) zu finden und diesen mit der Maus anzuklicken. Die Position des T’s ändert sich pro Durchgang. " + " \n " + " \n Ziel dabei ist es, so schnell wie möglich den Zielreiz zu finden und auf diesen entsprechend zu reagieren. Bitte lassen Sie während des gesamten Experiments Ihre Hand auf der Maus, um eine verzögerte Reaktion zu vermeiden."  
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst3
    TextComponent inst33
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Jeder Durchgang beginnt mit der Präsentation eines grauen Bildschirms mit einem Fixationskreuz in der Mitte, bevor Sie das Display mit dem Zielreiz sehen können. " + " \n Nachdem Sie den Zielreiz angeklickt haben, wird Ihnen kurz ein grauer Bildschirm gezeigt bevor der nächste Durchgang beginnt." 
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst4
    TextComponent inst44
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Wir beginnen das Experiment mit einigen Probedurchgängen, um Sie mit dem Konzept der Suchaufgabe bekannt zu machen. Anschließend erhalten Sie Feedback über Ihre Leistung." + " \n " + " \n Danach beginnen wir mit dem richtigen Experiment. Feedback wird Ihnen hier nicht mehr gegeben." + " \n " + "\n Viel Erfolg!" 
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instblock1
    TextComponent instblock11
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Nun beginnt das eigentliche Experiment:" + " \n " + " \n Starte Block Nummer 1" + " \n " + "\n Drücken Sie die Leertaste um zu beginnen…" 
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instblock2
    TextComponent instblock22_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Starte Block Nummer 2" + " \n " + " \n Drücken Sie die Leertaste um zu beginnen… "
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instblock2_2
    TextComponent instblock22
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Starte Block Nummer 2" + " \n " + " \n Drücken Sie die Leertaste um zu beginnen… "
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instende
    TextComponent instendee
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Wir sind nun am Ende des letzten Versuchsdurchgangs angekommen." + " \n " + "\n Vielen Dank für Ihre Teilnahme!" + " \n " + " \n Um das Experiment zu beenden drücken Sie bitte die Leertaste."
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine inst1
  Routine inst2
  Routine inst3
  Routine inst4
  LoopInitiator practice loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine practice_trial
    Routine feedback
  LoopTerminator practice
  Routine instblock1
  LoopInitiator block_1 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine trial
    Routine wait
  LoopTerminator block_1
  Routine instblock2
  LoopInitiator block_2 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine trial
    Routine wait
  LoopTerminator block_2
  Routine instende
